PsychoPy2experiment version="2024.1.5"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['session'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_OFF
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_DIAMETER
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = LEFT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = resting_state
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 1
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Routines
  Routine _welcome
    RoutineSettingsComponent _welcome
      saveStartStop = False
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    TextComponent text_welcome
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome! This task will take approximately 7 minutes.

        Before we explain the task, we need to first calibrate the eyetracking camera. Please sit in a comfortable position with your head on the chin rest. Once we begin, it is important that you stay in the same position throughout this task.

        Please take a moment to adjust the chair height, chin rest, and sitting posture. Make sure that you feel comfortable and can stay still for a while.


        When you are ready, press the spacebar
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = first key
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    SoundComponent read_welcome
      saveStartStop = False
      sound [set every repeat] = resource/welcome.wav
      startVal [time (s)] = 0.8
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  Routine _et_mask
    RoutineSettingsComponent _et_mask
      saveStartStop = False
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    TextComponent text_mask
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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  EyetrackerCalibrationRoutine _et_cal
    borderColor = green
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = white
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = black
    innerRadius = 0.005
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.015
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine _instruct_val
    RoutineSettingsComponent _instruct_val
      disabled = True
      saveStartStop = False
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    TextComponent text_et_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Excellent! We will do that one more time to verify how well the camera can see your eyes.


        Press the spacebar to begin
    KeyboardComponent key_et_2
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    SoundComponent read_et_2
      saveStartStop = False
      sound [set every repeat] = resource/eyetrack_validate_instruct.wav
      startVal [condition] = $text_et_2.status == STARTED
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  Routine _et_check
    RoutineSettingsComponent _et_check
      disabled = True
      saveStartStop = False
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    TextComponent text_et_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please give us a moment to check whether we need to repeat the camera calibration...
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_et_3
      allowedKeys = ['r', 'o']
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    SoundComponent read_et_3
      saveStartStop = False
      sound [set every repeat] = resource/eyetrack_check.wav
      startVal [condition] = $text_et_3.status == STARTED
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    CodeComponent end_loop
      Code Type = Py
      End Routine:
        # 1 if 'r' was pressed, 0 if 'o' was pressed
        whether_repeat = int(key_et_3.keys == 'r')

        # Finish repeat_cal loop if whether_repeat == 0
        if whether_repeat == 0:
            repeat_cal.finished = True
  Routine _instruct_repeat
    RoutineSettingsComponent _instruct_repeat
      disabled = True
      saveStartStop = False
      skipIf = whether_repeat == 0
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    TextComponent text_et_4
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      units = norm
      wrapWidth = 1.8
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      text:
        We need to repeat this part one more time.

        Make sure to keep looking at the circle when it stops, and follow it when it moves...
    KeyboardComponent key_et_4
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      store = first key
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    SoundComponent read_et_4
      saveStartStop = False
      sound [set every repeat] = resource/eyetrack_repeat.wav
      startVal [condition] = $text_et_4.status == STARTED
      stopVal [duration (s)] = 6.5
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  Routine __start__
    RoutineSettingsComponent __start__
      saveStartStop = False
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    TextComponent text_start
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = We are now ready to begin...
      units = norm
      wrapWidth = 1.8
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    SoundComponent read_start
      saveStartStop = False
      sound [set every repeat] = resource/ready_to_begin.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.6
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    CodeComponent trigger_table
      Code Type = Py
      Begin Experiment:
        ##TASK ID TRIGGER VALUES##
        # special code 100 (task start, task ID should follow immediately)
        task_start_code = 100
        # special code 101 (task ID for 3min EC + 3min EO resting state task)
        task_ID_code = 101

        ##GENERAL TRIGGER VALUES##
        # special code 122 (block start)
        block_start_code = 122
        # special code 123 (block end)
        block_end_code = 123

        ##TASK SPECIFIC TRIGGER VALUES##
        # N.B.: only use values 1-99 and provide clear comments on used values
    CodeComponent task_id
      Code Type = Py
      Begin Experiment:
        dev.activate_line(bitmask=task_start_code)  # special code for task start
        core.wait(0.5)  # wait 500ms between two consecutive triggers
        dev.activate_line(bitmask=task_ID_code)  # special code for task ID
    CodeComponent eeg
      Code Type = Py
      Before Experiment:
        import pyxid2

        devices = pyxid2.get_xid_devices()

        if devices:
            dev = devices[0]
            assert dev.device_name == 'Cedrus C-POD', "Incorrect C-POD detected."
            dev.set_pulse_duration(50)  # set pulse duration to 50ms

            # Start EEG recording
            dev.activate_line(bitmask=126)  # trigger 126 will start EEG
            core.wait(10)  # wait 10s for the EEG system to start recording

            # Marching lights test
            print("C-POD<->eego 7-bit trigger lines test...")
            for line in range(1, 8):  # raise lines 1-7 one at a time
                print("  raising line {} (bitmask {})".format(line, 2 ** (line-1)))
                dev.activate_line(lines=line)
                core.wait(0.5)  # wait 500ms between two consecutive triggers
            dev.con.set_digio_lines_to_mask(0)  # XidDevice.clear_all_lines()

        else:
            # Dummy XidDevice for code components to run without C-POD connected
            class dummyXidDevice(object):
                def __init__(self):
                    pass
                def activate_line(self, lines=None, bitmask=None):
                    pass


            print("WARNING: No C-POD connected for this session! "
                  "You must start/stop EEG recording manually!")
            dev = dummyXidDevice()
      End Experiment:
        # Stop EEG recording
        dev.activate_line(bitmask=127)  # trigger 127 will stop EEG
    EyetrackerRecordComponent etRecord
      actionType = Start Only
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
  Routine instruct_ec
    RoutineSettingsComponent instruct_ec
      saveStartStop = False
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    TextComponent text_instruct
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        This is a resting task. It is designed to measure brain waves when we are not thinking hard or trying to do anything.

        For the next 3 minutes, please close your eyes, and relax. Just let your mind wander. Try not to move, and try to stay awake.

        When the 3-minute is up, you will hear a tone to indicate the completion.


        Press the spacebar to begin
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = first key
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    SoundComponent read_instruct
      saveStartStop = False
      sound [set every repeat] = resource/instruct_ec_reading_audio.wav
      startVal [time (s)] = 0.8
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  Routine eyes_closed
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    TextComponent text_ec
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180.0
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    SoundComponent tone_finish
      sound [set every repeat] = Bsh
      startVal [time (s)] = 180.0
      stopVal [duration (s)] = 0.3
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    CodeComponent trigger_ec
      Code Type = Py
      Begin Routine:
        stimulus_pulse_started = False
        stimulus_pulse_started_2 = False
      Each Frame:
        if text_ec.status == STARTED and not stimulus_pulse_started:
            win.callOnFlip(dev.activate_line, bitmask=block_start_code)
            win.callOnFlip(eyetracker.sendMessage, block_start_code)
            stimulus_pulse_started = True

        if text_ec.status == FINISHED and not stimulus_pulse_started_2:
            dev.activate_line(bitmask=block_end_code)
            eyetracker.sendMessage(block_end_code)
            stimulus_pulse_started_2 = True
  Routine instruct_eo
    RoutineSettingsComponent instruct_eo
      saveStartStop = False
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    TextComponent text_instruct_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Great! That is the first of two parts in this task.

        For the next 3 minutes, please look at the fixation cross on the screen, and relax. As before, just let your mind wander. You may blink normally, but try to keep your eyes open, and try not to move.

        When the 3-minute is up, the cross will disappear to indicate the completion.


        Press the spacebar to begin
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = first key
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    SoundComponent read_instruct_2
      saveStartStop = False
      sound [set every repeat] = resource/instruct_eo_reading_audio.wav
      startVal [time (s)] = 0.8
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  Routine eyes_open
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    TextComponent text_eo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180.0
      text = +
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    CodeComponent trigger_eo
      Code Type = Py
      Begin Routine:
        stimulus_pulse_started = False
        stimulus_pulse_started_2 = False
      Each Frame:
        if text_eo.status == STARTED and not stimulus_pulse_started:
            win.callOnFlip(dev.activate_line, bitmask=block_start_code)
            win.callOnFlip(eyetracker.sendMessage, block_start_code)
            stimulus_pulse_started = True

        if text_eo.status == FINISHED and not stimulus_pulse_started_2:
            dev.activate_line(bitmask=block_end_code)
            eyetracker.sendMessage(block_end_code)
            stimulus_pulse_started_2 = True
  Routine __end__
    RoutineSettingsComponent __end__
      saveStartStop = False
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  Routine _thank_you
    RoutineSettingsComponent _thank_you
      saveStartStop = False
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    TextComponent text_thank_you
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you. You have completed this task!
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    SoundComponent read_thank_you
      saveStartStop = False
      sound [set every repeat] = resource/thank_you.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2.7
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  EyetrackerValidationRoutine _et_val
    borderColor = white
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    disabled = True
    expandDur = 1
    expandScale = 1.5
    fillColor = green
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = black
    innerRadius = 0.005
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.015
    progressMode = time
    randomisePos = True
    saveAsImg = True
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine _et_instruct
    RoutineSettingsComponent _et_instruct
      saveStartStop = False
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    TextComponent text_et
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        During the calibration, you will see a target circle moving around the screen. Please try to track it with your eyes.

        Make sure to keep looking at the circle when it stops, and follow it when it moves. It is important that you keep your head on the chin rest once this part begins.


        Press the spacebar when you are ready, and our team will start the calibration for you
    KeyboardComponent key_et
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = first key
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    SoundComponent read_et
      saveStartStop = False
      sound [set every repeat] = resource/eyetrack_calibrate_instruct.wav
      startVal [time (s)] = 0.8
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Flow
  Routine _welcome
  Routine _et_instruct
  Routine _et_mask
  EyetrackerCalibrationRoutine _et_cal
  Routine __start__
  Routine instruct_ec
  Routine eyes_closed
  Routine instruct_eo
  Routine eyes_open
  Routine _thank_you
